PsychoPy2experiment version="2026.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SPR_template
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine spr_setup
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    CodeComponent spr_setup_code
      Code Type = Auto->JS
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      Begin Routine:
        # Split the sentence from your CSV into a list of words
        spr_words = Sentence.split()

        # Get the total word count to set the inner loop reps
        num_words = len(spr_words)

        # Initialize word position counter
        word_idx = -1
  Routine spr_routine
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    CodeComponent spr_code
      Code Type = Both
      Begin JS Routine:
        // Build the Moving Window
        var masked_list = [];
        for (let i = 0; i < spr_words.length; i++) {
            let w = spr_words[i];
            if (i === word_idx) {
                masked_list.push(w); // Show the current target word
            } else {
                masked_list.push('-'.repeat(w.length)); // Replace other words with dashes
            }
        }

        // Combine words into a single sentence string
        masked_sentence_str = masked_list.join(' ');

        if (word_idx === -1) {
            current_word = "MASKED_START";
        } else {
            current_word = spr_words[word_idx];
        }
      Begin Routine:
        # Build the Moving Window
        masked_list = []
        for i, w in enumerate(spr_words):
            if i == word_idx:
                masked_list.append(w)  # Show the current target word
            else:
                masked_list.append('-' * len(w))  # Replace other words with dashes

        # Combine words into a single sentence string using a safe variable name
        masked_sentence_str = ' '.join(masked_list)
        if word_idx == -1:
            current_word = "MASKED_START"
        else:
            current_word = spr_words[word_idx]
      End JS Routine:
        psychoJS.experiment.addData("spr_word", current_word);
        psychoJS.experiment.addData("spr_word_idx", (word_idx + 1));
        psychoJS.experiment.addData("spr_word_rt", spr_space_key.rt);
        word_idx += 1;
      End Routine:
        # Log word-by-word data into the PsychoPy data file
        thisExp.addData('spr_word', current_word)
        thisExp.addData('spr_word_idx', word_idx + 1)
        thisExp.addData('spr_word_rt', spr_space_key.rt)

        # Increment word index for the next iteration
        word_idx += 1
    TextComponent spr_display_text
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $masked_sentence_str
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    KeyboardComponent spr_space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine instruction
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent instructions_key
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine q_routine
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    TextComponent q_text
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Question
    KeyboardComponent q_key
      allowedKeys [set every repeat] = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent yes_no_text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = YES [f]                 NO [j]
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  Routine end_practice_2
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    TextComponent end_practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Practice complete! Press [c] to begin the main experiment.
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    KeyboardComponent end_practice_key
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.





        Press [space] to begin.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up files and instructions
        instruction_text = (
            "Welcome to the reading task. Press [space] to read through each word. "
            "Press [c] when you are ready to begin the practice sentences."
        )
        cond_file = "stimuli/sample_stimuli.csv"
        practice_file = "stimuli/sample_practice.csv"
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You did it!

        Please tell the experimenter that you have finished.
Flow
  Routine welcome
  Routine instruction
  LoopInitiator spr_practice_loop loopType="TrialHandler"
    conditionsFile = $practice_file
    loopType = sequential
    nReps = 1
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    Routine spr_setup
    LoopInitiator word_loop_practice_spr loopType="TrialHandler"
      loopType = sequential
      nReps = $num_words + 1
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      Routine spr_routine
    LoopTerminator word_loop_practice_spr
    Routine q_routine
  LoopTerminator spr_practice_loop
  Routine end_practice_2
  LoopInitiator spr_sentence_loop loopType="TrialHandler"
    conditionsFile = $cond_file
    loopType = sequential
    nReps = 1
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    Routine spr_setup
    LoopInitiator spr_word_loop loopType="TrialHandler"
      loopType = sequential
      nReps = $num_words + 1
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      Routine spr_routine
    LoopTerminator spr_word_loop
    Routine q_routine
  LoopTerminator spr_sentence_loop
  Routine end
